PsychoPy2experiment version="2022.2.2"
Settings
  Data filename = f"data/{expInfo['id']}_{expInfo['session']}_{expInfo['run']}_{expName}_{expInfo['date']}"
  Experiment info = {'id': '', 'session': '', 'run': ''}
  Full-screen window = True
  Monitor = Monitor
  Save excel file = True
  Screen = 1
  Units = norm
  Use version = latest
  Window size (pixels) = [1920, 1080]
  color = -0.1765, -0.1765, -0.1765
  expName = my_experiment
  exportHTML = on Save
  keyboardBackend = ioHub
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Routines
  Routine fixation_beginning
    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        # declare all variables that are used afterwards and set them to their default value
        play = ''
        key_pressed = 0
        conditions = ['Start']
      End Routine:
        # save the time at which the trials start
        start_trials = globalClock.getTime()
    PolygonComponent fixation_cross_beginning
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0.4
      shape = cross
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      units = pix
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  Routine fixation_end
    PolygonComponent fixation_cross_end
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0.4
      shape = cross
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16.0
      units = pix
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  Routine waiting
    CodeComponent code
      Code Type = Py
      Before Experiment:
        # start an individual clock
        globalClock = core.Clock()
      Begin Experiment:
        import pandas as pd

        # read in the run orders for all different sessions
        ordering_file = pd.read_excel('ExperimentOrder.xlsx')
        # get the order for the specified session (1-48)
        run_files = ordering_file.iloc[int(expInfo['session'])-1].to_list()
        # get the run file for the specified run (1-6)
        run_file = run_files[int(expInfo['run'])-1]

        # save the file paths of the videos that are displayed in this run in a list
        file_paths = []
        # get the file paths from the excel sheet and drop the rows with a NULL vent
        paths = pd.read_excel(run_file, usecols='E').dropna().values.tolist()
        for path in paths:
            file_paths.append(path)
        # flatten the list and only keep unique elements
        file_paths = {path for sublist in file_paths for path in sublist}
      Begin Routine:
        import pandas as pd

        # start preloading the videos
        preloading = True

        stimuli = {}
        for path in file_paths:
            # load the video (in a smaller size to make the prelaoding a bit faster) from
            # the path specified before as a MovieStim3 object and append it to a stimuli
            # directory with the file path as the key.
            stimuli[path] = visual.MovieStim3(win=win,filename=path, name=path[:-4], size=(1760,990))

        preloading = False

        # Note: After extensive testing, I have come to the conclusion that the
        # MovieStims are considered static elements now and are therefore loaded before
        # the experiment starts, no matter where you place the preloading code.
        # Therefore, it is also not possible to display a corresponding text during the
        # preloading.
    TextComponent waiting_txt
      color = black
      letterHeight = 0.08
      startVal [condition] = preloading == False
      text = Preloading done! Waiting for trigger...
      wrapWidth = 1.4
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    KeyboardComponent trigger
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [condition] = preloading == False
      syncScreenRefresh = False
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  Routine main
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        # save the time at which the current trial started
        start_trial = globalClock.getTime()
        # append the name of the current event to the conditions list
        conditions.append(EventName)


        if conditions[-1] == 'NULL':
            play = 'NULL'
        else:
            # if the current condition is a catch trial or a stimuli get its MovieStim3
            # object from the stimuli dictionary. Use FilePath as a key.
            stim = stimuli[FilePath]
            # set the MovieStim3 object to PLAYING
            stim.play()
      Each Frame:
        import numpy as np

        if conditions[-1] != 'NULL': # if the current condition is a catch trial or a stimuli
            if key_resp.keys in ('r','b', 'g', 'y'): # save if there was a button press
                key_pressed = 1
            # if the trial is longer than the video duration (due to frame dropping), pause
            # the video and display the last frame until the routine ends
            if np.ceil(t) == stim.duration:
                stim.pause()
            # draw the video frame
            stim.draw()
        # if the length of the routine is longer than or equal to the planned duration,
        # stop the routine (use Duration -0.01 to account for minor timing issues)
        if t >= Duration - 0.01:
            continueRoutine = False
      End Routine:
        # save the key responses and their properties to the data file
        if key_pressed == 1 and 'Catch' in conditions[-2:]:
            thisExp.addData('key_resp', 'got catch')
        elif key_pressed == 0 and 'Catch' in conditions[-2:]:
            thisExp.addData('key_resp', 'missed catch')
        elif key_pressed == 1:
            thisExp.addData('key_resp', 'false press')
        else:
            thisExp.addData('key_resp', 'no press')

        # save the on and offset times of the trials to the data file
        thisExp.addData('AbsoluteOnsetTime', start_trial)
        thisExp.addData('RelativeOnsetTime', start_trial - start_trials)
        end_trial = globalClock.getTime()
        thisExp.addData('AbsoluteOffsetTime', end_trial)
        thisExp.addData('RelativeOffsetTime', end_trial - start_trials)
        thisExp.addData('ActualDuration', end_trial - start_trial)

        # set the variables to their default value for the next trial
        play = ''
        key_pressed = 0
    KeyboardComponent key_resp
      allowedKeys = 'r','b', 'g', 'y'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $Duration
      syncScreenRefresh = False
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    PolygonComponent fixation_cross
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0.4
      saveStartStop = False
      shape = cross
      size = (100,100)
      startEstim = 0
      startVal [condition] = play == 'NULL'
      units = pix
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Flow
  Routine waiting
  Routine fixation_beginning
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $run_file
    loopType = sequential
    nReps = 1
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    Routine main
  LoopTerminator trials
  Routine fixation_end
